CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\\\\\\\\\\\\\/]\\\\\\\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:.*\\\\\\\\(?P<gene>.*)\\\\\\\\.*$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "C001")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C002")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,200
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
MeasureObjectIntensity:[module_num:6|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
    Hidden:1
    Select an image to measure:GFP
    Select objects to measure:Nuclei

FilterObjects:[module_num:7|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
    Name the output objects:FilteredNuclei
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_GFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.06
    Filter using a maximum measurement value?:Yes
    Maximum value:0.7

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:FilteredNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:GFP
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    Regularization factor:1
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:70
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    Retain the outlines of the identified objects?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:GFP
    Select objects to measure:Cells
    Select objects to measure:ExpandedNuclei

FilterObjects:[module_num:12|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
    Name the output objects:FilteredCells
    Select the object to filter:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5000
    Filter using a maximum measurement value?:Yes
    Maximum value:50000
    Select the measurement to filter by:Intensity_MeanIntensity_GFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:Yes
    Maximum value:0.7

FilterObjects:[module_num:13|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
    Name the output objects:FilteredExpCells
    Select the object to filter:ExpandedNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_GFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:14|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
    Hidden:1
    Select an image to measure:GFP
    Select objects to measure:FilteredExpCells
    Select objects to measure:FilteredCells

MeasureTexture:[module_num:15|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
    Hidden:1
    Hidden:2
    Hidden:1
    Select an image to measure:GFP
    Select objects to measure:FilteredCells
    Select objects to measure:FilteredExpCells
    Texture scale to measure:5
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4

MeasurementTAS:[module_num:16|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
    Input image name::GFP
    Input object name:FilteredCells

MeasurementTAS:[module_num:17|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
    Input image name::GFP
    Input object name:FilteredExpCells

MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:FilteredCells
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:No
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